# 1 "/opt/topspin3.2/exp/stan/nmr/lists/pp/mlevgpph19"
;mlevgpph19
;avance-version (12/01/11)
;homonuclear Hartman-Hahn transfer using MLEV17 sequence
;   for mixing
;using two power levels for excitation and spinlock
;phase sensitive
;water suppression using 3-9-19 pulse sequence with gradients
;
;A. Bax & D.G. Davis, J. Magn. Reson. 65, 355-360 (1985)
;M. Piotto, V. Saudek & V. Sklenar, J. Biomol. NMR 2, 661 - 666 (1992)
;V. Sklenar, M. Piotto, R. Leppik & V. Saudek, J. Magn. Reson., 
;   Series A 102, 241 -245 (1993)
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


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"p5=p6*.667"
"p7=p6*2"
"d12=20u"


"in0=inf1"
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"d0=in0/2-p1*2/3.1416-4u"


"SCALEF=p7*2/p5"
"FACTOR1=((d9-p17*2)/(p6*64+p5))/SCALEF"
"l1=FACTOR1*SCALEF"
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"TAU=p1*2/3.1416-(p0-p27)*0.231-de+46u"


"acqt0=0"
baseopt_echo
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define delay MCWRK
define delay MCREST
define delay d0orig
"d0orig=d0"
define loopcounter t1loop
"t1loop=0"
define loopcounter ph1loop
"ph1loop=0"
define loopcounter ST1CNT
"ST1CNT = td1 / 2"
"MCREST = d1 - d1"
"MCWRK = 0.200000*d1"

    dccorr
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1 ze 
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      "d0=d0orig + t1loop * in0 "
      "phval1 = (ph1loop % 4) * 90"
      MCWRK ip1 + phval1
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2 MCWRK  * 2
LBLF1, MCWRK  * 2
LBLST1, MCWRK
  MCREST
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3 d12 pl1:f1
  p1 ph1
  d0
  4u pl10:f1
  (p17 ph26)
						;begin MLEV17
4 (p6 ph22 p7 ph23 p6 ph22)
  (p6 ph24 p7 ph25 p6 ph24)
  (p6 ph24 p7 ph25 p6 ph24)
  (p6 ph22 p7 ph23 p6 ph22)
  (p6 ph24 p7 ph25 p6 ph24)
  (p6 ph24 p7 ph25 p6 ph24)
  (p6 ph22 p7 ph23 p6 ph22)
  (p6 ph22 p7 ph23 p6 ph22)
  (p6 ph24 p7 ph25 p6 ph24)
  (p6 ph22 p7 ph23 p6 ph22)
  (p6 ph22 p7 ph23 p6 ph22)
  (p6 ph24 p7 ph25 p6 ph24)
  (p6 ph22 p7 ph23 p6 ph22)
  (p6 ph22 p7 ph23 p6 ph22)
  (p6 ph24 p7 ph25 p6 ph24)
  (p6 ph24 p7 ph25 p6 ph24)
  (p5 ph23)
  lo to 4 times l1 
						;end MLEV17
  (p17 ph26) 
  50u setnmr3|0 setnmr0|34|32|33 ctrlgrad 0
  p16:gp1
  d16 pl18:f1
  p27*0.231 ph4
  d19*2
  p27*0.692 ph4
  d19*2
  p27*1.462 ph4
  d19*2
  p27*1.462 ph5
  d19*2
  p27*0.692 ph5
  d19*2
  p0*0.231 ph5
  TAU
  p16:gp1
  d16
  4u setnmr3^0 setnmr0^34^32^33 ctrlgrad 7
  go=2 ph31
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  MCWRK  wr #0 if #0 zd 

  "ph1loop+=1"
      "d0=d0orig + t1loop * in0 "
      "phval1 = (ph1loop % 4) * 90"
      MCWRK ip1 + phval1
  lo to LBLF1 times 2
  MCWRK 

  "t1loop+=1"
      "d0=d0orig + t1loop * in0 "
      "phval1 = (ph1loop % 4) * 90"
      MCWRK ip1 + phval1
  lo to LBLST1 times ST1CNT
  MCWRK 
  "t1loop=0"
  "ph1loop=0"
  MCWRK
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exit

  
ph1=0 2
ph4=0 0 1 1 2 2 3 3 
ph5=2 2 3 3 0 0 1 1
ph22=3
ph23=0
ph24=1
ph25=2
ph26=0
ph31=0 2 2 0 0 2 2 0 

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;pl1 : f1 channel - power level for pulse (default)
;pl10: f1 channel - power level for TOCSY-spinlock
;pl18: f1 channel - power level for 3-9-19-pulse (watergate)
;p0 : f1 channel -  90 degree pulse at pl18
;                      use for fine adjustment
;p1 : f1 channel -  90 degree high power pulse
;p5 : f1 channel -  60 degree low power pulse
;p6 : f1 channel -  90 degree low power pulse
;p7 : f1 channel - 180 degree low power pulse
;p16: homospoil/gradient pulse
;p17: f1 channel -  trim pulse                       [2.5 msec]
;p27: f1 channel -  90 degree pulse at pl18
;d0 : incremented delay (2D)
;d1 : relaxation delay; 1-5 * T1
;d9 : TOCSY mixing time
;d12: delay for power switching                      [20 usec]
;d16: delay for homospoil/gradient recovery
;d19: delay for binomial water suppression
;     d19 = (1/(2*d)), d = distance of next null (in Hz)
;l1: loop for MLEV cycle: (((p6*64) + p5) * l1) + (p17*2) = mixing time
;inf1: 1/SW = 2 * DW
;in0: 1/(1 * SW) = 2 * DW
;nd0: 1
;ns: 2 * n
;ds: 16
;td1: number of experiments
;FnMODE: States-TPPI, TPPI, States or QSEQ

;use gradient ratio:	gp 1
;			  20

;for z-only gradients:
;gpz1: 20%
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;use gradient files:   
;gpnam1: SMSQ10.100


;Processing
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;PHC0(F1): 180
;PHC1(F1): -180
;FCOR(F1): 1


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;$Id: mlevgpph19,v 1.12.6.1 2012/01/31 17:56:33 ber Exp $
